PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1440, 900]
  expName = ldt
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Routines
  Routine ldt
    TextComponent stimDisplay
      letterHeight = 50
      startVal [time (s)] = 0.0
      text [set every repeat] = $target
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    KeyboardComponent ldtResp
      allowedKeys = 'a','l'
      correctAns = $correct
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine fixation
  Routine instructions
    TextComponent text
      letterHeight = 30
      startVal [time (s)] = 0.0
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      text:
        ****instructions****
        press 'a' for words
        press 'l' for non-words'


        press SPACE to begin
    KeyboardComponent instructionReading
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine thankyou
    TextComponent thankYou
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        ****Experiment Completed****

        Please wait while your data is saved.

        Thank you for participating!
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('target', 'online'), ('condition', 'word'), ('correct', 'a')]),
      OrderedDict([('target', 'experiment'), ('condition', 'word'), ('correct', 'a')]),
      OrderedDict([('target', 'lexical'), ('condition', 'word'), ('correct', 'a')]),
      OrderedDict([('target', 'decision'), ('condition', 'word'), ('correct', 'a')]),
      OrderedDict([('target', 'practice'), ('condition', 'word'), ('correct', 'a')]),
      OrderedDict([('target', 'gordl'), ('condition', 'nonWord'), ('correct', 'l')]),
      OrderedDict([('target', 'plorf'), ('condition', 'nonWord'), ('correct', 'l')]),
      OrderedDict([('target', 'fytig'), ('condition', 'nonWord'), ('correct', 'l')]),
      OrderedDict([('target', 'grafth'), ('condition', 'nonWord'), ('correct', 'l')]),
      OrderedDict([('target', 'herfy'), ('condition', 'nonWord'), ('correct', 'l')])]
    Routine fixation
    Routine ldt
  LoopTerminator trials
  Routine thankyou
